PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 960]
  expName = lakota_symbols
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine instructions
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    TextComponent instruct
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        You will see a series of visual designs.


        Your task is simply to look carefully at each design while keeping your eyes on the screen and minimizing movement.


        Each design will appear for 5 seconds, and you will see each one several times throughout the experiment.

        After the first time each symbol is shown, you will be asked to rate how meaningful it is to you. This question will not appear again for any subsequent presentations of the same symbol.



        Please remain as still as possible during the presentation — try not to move your eyes, face, or hands.


        There are 20 designs in total, and each will be shown 6 times in random order.



        When you are ready to begin,
        press the SPACE BAR to start the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        # =========================
        # TCP TRIGGER SETUP (DSI-Streamer Client Import, e.g., 8844)
        # =========================
        import socket

        TARGET_IP   = "127.0.0.1"   # or the DSI-Streamer PC's LAN IP
        TARGET_PORT = 8844          # DSI-Streamer: Advanced → TCP/IP → Client Import

        _tcp = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        _tcp.connect((TARGET_IP, TARGET_PORT))

        def send_marker(msg: str):
            """Send one marker line to DSI-Streamer via TCP; CRLF helps UI display."""
            line = (msg + "\r\n").encode("utf-8")
            try:
                _tcp.sendall(line)
                print("SENT:", msg)   # visible in PsychoPy Runner output
            except Exception as e:
                print("SEND ERROR:", e)

        print("✅ Connected to DSI-Streamer via TCP")

        # =========================
        # FIRST-PRESENTATION ONLY (for familiarity screen)
        # =========================
        # Track which images have already been rated so we only ask once per symbol
        seen_symbols = set()
      End Experiment:
        # Close the TCP connection cleanly
        try:
            _tcp.close()
        except Exception:
            pass
  Routine familiarity
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How meaningful is this symbol to you ?
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = True
      granularity = 0
      initVal = 3
      labels = ("No meaning", "", "", "", "Wide meaning")
      letterHeight = 0.03
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        # Show the rating only the first time each symbol appears
        current_img = image_3.image  # same variable used in the trial routine

        if current_img in seen_symbols:
            # Already rated: skip this routine
            # (Optional) Write placeholders so your CSV has consistent columns
            trials.addData('slider.response', 'NA')
            trials.addData('slider.rt', np.nan)
            continueRoutine = False
        else:
            # First time we see this symbol: ask the question and remember it
            seen_symbols.add(current_img)
  Routine empty_gray_2
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    ImageComponent empty_gray
      image = stimuli/fixation_cross.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = False
  Routine trial
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    ImageComponent image_3
      image [set every repeat] = $image
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        # Get the actual filename that will be displayed this trial
        current_img = image_3.image

        # A per-trial clock zeroed exactly at the display flip
        trialClock = core.Clock()
        win.callOnFlip(trialClock.reset)

        # Send ON marker exactly on the flip that draws the image (gold-standard alignment)
        win.callOnFlip(send_marker, f"ON,{current_img}")

        # Your image is on screen for 5.0 s (per your ImageStim duration)
        stim_dur = 5.0
  Routine words
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    ImageComponent word_loop_image
      image [set every repeat] = $image
      pos = (0, 0.2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.02
      pos = (0, -0.2)
      size = (0.22, 0.5)
      startVal [time (s)] = 0.0
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      placeholder:
        Write ten words that come to mind when you see this symbol.
        Type one word per line — press Enter after each word.
    ButtonComponent next
      bold = True
      forceEndRoutine = True
      letterHeight = 0.02
      pos = (0.65, -0.4)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Click here to continue the experiment
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  Routine instruction_2
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Thank you for completing this first phase of the experiment.
        Now, each symbol will be presented once again, and you will be asked to write 10 words associated with each of them.

        Press the spacebar to continue
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli_list.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [{'image': 'stimuli/bag.png', 'category': 'authentic'},
      {'image': 'stimuli/clouds.png', 'category': 'authentic'},
      {'image': 'stimuli/dragonfly.png', 'category': 'authentic'},
      {'image': 'stimuli/earth_square.png', 'category': 'authentic'},
      {'image': 'stimuli/feather.png', 'category': 'authentic'},
      {'image': 'stimuli/horse_track.png', 'category': 'authentic'},
      {'image': 'stimuli/house.png', 'category': 'authentic'},
      {'image': 'stimuli/lightning.png', 'category': 'authentic'},
      {'image': 'stimuli/star.png', 'category': 'authentic'},
      {'image': 'stimuli/thunder.png', 'category': 'authentic'},
      {'image': 'stimuli/NA_01.png', 'category': False},
      {'image': 'stimuli/NA_02.png', 'category': False},
      {'image': 'stimuli/NA_03.png', 'category': False},
      {'image': 'stimuli/NA_04.png', 'category': False},
      {'image': 'stimuli/NA_05.png', 'category': False},
      {'image': 'stimuli/NA_06.png', 'category': False},
      {'image': 'stimuli/NA_07.png', 'category': False},
      {'image': 'stimuli/NA_08.png', 'category': False},
      {'image': 'stimuli/NA_09.png', 'category': False},
      {'image': 'stimuli/NA_10.png', 'category': False}]
    Routine empty_gray_2
    Routine trial
    Routine familiarity
  LoopTerminator trials
  Routine instruction_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stimuli_list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'image': 'stimuli/bag.png', 'category': 'authentic'},
      {'image': 'stimuli/clouds.png', 'category': 'authentic'},
      {'image': 'stimuli/dragonfly.png', 'category': 'authentic'},
      {'image': 'stimuli/earth_square.png', 'category': 'authentic'},
      {'image': 'stimuli/feather.png', 'category': 'authentic'},
      {'image': 'stimuli/horse_track.png', 'category': 'authentic'},
      {'image': 'stimuli/house.png', 'category': 'authentic'},
      {'image': 'stimuli/lightning.png', 'category': 'authentic'},
      {'image': 'stimuli/star.png', 'category': 'authentic'},
      {'image': 'stimuli/thunder.png', 'category': 'authentic'},
      {'image': 'stimuli/NA_01.png', 'category': False},
      {'image': 'stimuli/NA_02.png', 'category': False},
      {'image': 'stimuli/NA_03.png', 'category': False},
      {'image': 'stimuli/NA_04.png', 'category': False},
      {'image': 'stimuli/NA_05.png', 'category': False},
      {'image': 'stimuli/NA_06.png', 'category': False},
      {'image': 'stimuli/NA_07.png', 'category': False},
      {'image': 'stimuli/NA_08.png', 'category': False},
      {'image': 'stimuli/NA_09.png', 'category': False},
      {'image': 'stimuli/NA_10.png', 'category': False}]
    Routine words
  LoopTerminator trials_2
